PsychoPy2experiment version="2020.2.8"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://bournemouthpsych.eu.qualtrics.com/jfe/form/SV_4UTkhSmaQNjgz7D?STATUS=completed
  Experiment info = {'participant': '999'}
  Force stereo = False
  Full-screen window = True
  Incomplete URL = https://bournemouthpsych.eu.qualtrics.com/jfe/form/SV_4UTkhSmaQNjgz7D
  Monitor = testMonitor
  Resources = ['../instructions.xlsx', '../instructions_after_practice.xlsx', '../keyboard-example.gif', '../touchscreen-example.gif', '../trials_list_practice.xlsx', '../trials_list0.xlsx', '../trials_list1.xlsx', '../trials_list2.xlsx', '../trials_list3.xlsx']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  blendMode = add
  color = $[1.000,1.000,1.000]
  expName = lexical_decision_task_MP_exp2
  exportHTML = on Save
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Routines
  Routine Instructions
    TextComponent instructions
      color = black
      font = Courier New
      letterHeight = .035
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent instr_done_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent instr_done_button
      fillColor = white
      lineColor = black
      pos = (0, -.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr_done_label
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        // Some shortcuts to make auto-conversion from Python easier
        // from https://docs.google.com/document/d/13jp0QAqQeFlYSjeZS0fDInvgaDzBXjGQNe4VNKbbNHQ/edit?pli=1#

        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;


        //round = function(num, n=0) {
        //    return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        //}


        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
    ImageComponent instructions_image
      image [set every repeat] = $instruct_image
      size = (0.4, 0.3)
      startVal [condition] = $has_image==1
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  Routine End
    TextComponent thank_you
      color = black
      font = Courier New
      letterHeight [set every repeat] = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Please do NOT close this window until you have been redirected to the debrief page.

        Please wait for the message “Thank you for your patience” to appear and then click OK to continue to the debrief page.

        You must go to the debrief page in order for your participation to be recorded.
  Routine feedback
    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msg = "No feedback message set yet"
      Begin Routine:
        if corr == -1:
            msg="Too slow!"
            feedback_color = "black"
            feedback_duration = .5
        else:
            if TrialID >= 1000: #practice trials
                feedback_duration = .5
                if corr:
                    msg="Correct"
                    feedback_color = "green"
                else:
                    msg="Incorrect"
                    feedback_color = "red"
            else:
                # just end this routine if it's not a practice trial
                feedback_duration = 0
    TextComponent feedback_text
      color [set every repeat] = $feedback_color
      durationEstim = .5
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $msg
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    PolygonComponent button_left_2
      durationEstim = .5
      fillColor = white
      lineColor = black
      pos = (-.4, -.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
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    PolygonComponent button_right_2
      durationEstim = .5
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
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    TextComponent trial_label_left_2
      color = black
      durationEstim = .5
      font = Courier New
      letterHeight = 0.05
      pos = (-.4, -.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
      text = Z = Nonword
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    TextComponent trial_label_right_2
      color = black
      durationEstim = .5
      font = Courier New
      letterHeight = .05
      pos = (0.4, -0.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
      text = M = Word
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  Routine setInstructionText
    CodeComponent set_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text = "In this task you will judge whether a string of letters forms a word or not (i.e., is a nonword).\nLook at the cross at the start of each trial. After a second, a string of letters will appear. Your task is to indicate if the letter string forms a word or not (i.e., if it is a nonword). If your device has a keyboard, press the left arrow key for nonwords and the right arrow key for words. If your device does not have a keyboard, touch the left button on the screen for nonwords and the right button for words. Do not use the mouse as this will slow down your response.\nIt is very important that you respond as quickly and accurately as possible, as each letter string will only be on the screen for two seconds. If you do not respond within this time, the message 'Too slow!' will be displayed and the experiment will progress to the next letter string.\nThe first 20 trials will be practice trials and you will receive feedback on your answers.\n\nPress the space bar or touch the button below to continue."
  Routine prepareTrialsExperiment
    CodeComponent pick_conditions_file
      Code Type = Auto->JS
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      Begin Routine:
        # if participant number is odd, use condition 1, otherwise 0
        conditions_file = "experimental_trials_cond_"+str(int(expInfo['participant'])%2)+".xlsx"
  Routine setInstructionTextExperiment
    CodeComponent set_instruction_text_experiment
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text = "You have completed the practice trials. During the experimental trials, you will not receive feedback, but it is very important that you respond as quickly and accurately as possible.\nBefore you begin, please ensure that you are in a comfortable and quiet location and will not be disturbed for about 10 minutes, as the experiment cannot be paused and we cannot use your data if you do not complete all the trials.\n When you are ready to start the experimental trials, please press space or touch the button below."
  Routine timingFeedback
    CodeComponent prepare_timing_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if corr == -1:
            feedback_duration = 0.5
        else:
            feedback_duration = 0
    TextComponent timing_feedback
      durationEstim = .5
      font = vera
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text = Too slow!
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  Routine Break
    CodeComponent break_code
      Code Type = JS
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      Begin JS Experiment:
        break_every = 121;
        break_msg_top = "";
        break_msg_middle = "Please take a short break.\n";
        break_msg_bottom = "When you are done, please press the space bar or touch the \"Continue\" button below to continue the experiment.";
        break_msg = "";

        trials_presented_so_far = 0
      Begin JS Routine:
        trials_presented_so_far++

        break_msg_top = (("BREAK\n\nYou have now completed " + round(((trials_presented_so_far / experiment_trials.nTotal) * 100)).toString()) + "% of the experiment. ");
        break_msg = ((break_msg_top + break_msg_middle) + break_msg_bottom);
        show_break = trials_presented_so_far % break_every == 0
        //console.log(trials_presented_so_far)
        //console.log(experiment_trials.nRemaining)
        //console.log(show_break)
      Each JS Frame:
        // exit the break routine immediately if we are not on a break trial
        // break trials occur every break_every trials (see Begin Experiment)

        if (!show_break){
            continueRoutine = false;
        }
    TextComponent break_text
      color = black
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $break_msg
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    MouseComponent break_done_touch
      clickable = break_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent break_done_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent break_done_button
      fillColor = white
      lineColor = black
      pos = (0, -.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent break_done_button_label
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Continue
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  Routine show_image
    ImageComponent instruction_image
      image [set every repeat] = $instruct_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = instruction_image
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent show_image_code
      Code Type = JS
      Each JS Frame:
        // exit the routine immediately if this page does not have an image

        if (has_image == 0){
            continueRoutine = false;
        }
  Routine presentTrial
    TextComponent fixation_mask
      color = black
      durationEstim = 0.5
      font = Courier New
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mask_duration
      text = ######
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    TextComponent prime_text
      color = black
      durationEstim = .056
      font = Courier New
      letterHeight = 0.1
      startEstim = .5
      startVal [time (s)] = $mask_duration
      stopVal [duration (s)] = $prime_duration_s
      text [set every repeat] = $Prime
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    TextComponent target
      color = black
      durationEstim = 5
      font = Courier New
      letterHeight = .1
      startEstim = 0.556
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = $trial_timeout
      text [set every repeat] = $Target
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    KeyboardComponent response
      allowedKeys = 'm', 'z'
      correctAns = $corrAns
      durationEstim = 5
      forceEndRoutine = True
      startEstim = .556
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = $trial_timeout
      storeCorrect = True
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    CodeComponent settings_and_cond
      Code Type = Both
      Begin Experiment:
        dpi_scaling = 1

        font_scale = 1.5

        fixation_height = .1

        text_height = .1

        arrow_keys_height = .05

        # counterbalancing_condition = int(expInfo['participant']) % 4
        # this doesn't work since the participant ID is alphanumeric
        # counterbalancing_condition = randint(0,3)

        counterbalancing_condition = 3

        thisExp.addData('counterbalancing_condition',  counterbalancing_condition)

        # this will ensure that participants see the trials from the following files
        #

        trial_list_file = "trials_list" + str(counterbalancing_condition) + ".xlsx"

        # this is the duration of the mask to be displayed before the prime
        mask_duration = .5

        trial_timeout = 2
      Begin JS Experiment:
        dpi_scaling = 1;
        font_scale = 1.5;
        fixation_height = 0.1;
        text_height = 0.1;
        arrow_keys_height = 0.05;
        // counterbalancing_condition = (Math.floor((Math.random() * ((3 - 0) + 1))) + 0);
        counterbalancing_condition = 3;
        thisExp.addData("counterbalancing_condition", counterbalancing_condition);
        trial_list_file = (("trials_list" + counterbalancing_condition.toString()) + ".xlsx");
        mask_duration = 0.5;
        trial_timeout = 2;
      Begin JS Routine:
        prime_duration_s = (PrimeDuration / 1000);
        target_onset = (mask_duration + prime_duration_s);
        button_duration = (target_onset + trial_timeout);
      Begin Routine:
        # Prime duration is in ms, should be in s
        prime_duration_s = PrimeDuration/1000

        # the target should appear after the mask duration and the prime duration
        target_onset = mask_duration + prime_duration_s

        # buttons should show at all times, so their duration is the duration until the target appears + the trial timeout
        button_duration = target_onset + trial_timeout
    PolygonComponent button_left
      durationEstim = 5.556
      fillColor = white
      lineColor = black
      pos = (-.4, -.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
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    PolygonComponent button_right
      durationEstim = 5.556
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
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    TextComponent trial_label_right
      color = black
      durationEstim = 5.556
      font = Courier New
      letterHeight = .05
      pos = (0.4, -0.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
      text = M = Word
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    MouseComponent touch_resp
      clickable = button_left, button_right
      durationEstim = 5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startEstim = .556
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = $trial_timeout
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    CodeComponent check_correct
      Code Type = Auto->JS
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      Begin Routine:
        corr = -1
      End Routine:
        # check if correct (either mouse or keyboard)
        if response.keys:
            corr = response.corr
            rt = response.rt
        elif touch_resp.clicked_name[0] != undefined:
            rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
            if (('left' in touch_resp.clicked_name[0] and corrAns=='z') or
                ('right' in touch_resp.clicked_name[0] and corrAns=='m')):
                corr = 1
            else:
                corr = 0
        else:
            corr = -1

        thisExp.addData('rt',  rt)
        thisExp.addData('corr', corr)
    TextComponent trial_label_left_new
      color = black
      durationEstim = 5.556
      font = Courier New
      letterHeight = 0.05
      pos = (-.4, -.3)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $button_duration
      text = Z = Nonword
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Flow
  LoopInitiator instruction_pages loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pageN', 1), ('phase', 'instructions'), ('instruct_text', 'INSTRUCTIONS\nAt the start of each trial, look at the hash marks (######) in the center of the screen. After a moment, a string of letters will appear. Your task is to indicate if the letter string forms a word or not (i.e., if it is a nonword). For example, AUTHOR is a word while AUTHON is a nonword.\n\nPress the space bar or touch the button below to continue.'), ('has_image', 0), ('instruct_image', None)]),
      OrderedDict([('pageN', 2), ('phase', 'instructions'), ('instruct_text', "If your device has a keyboard, press the 'a' key for nonwords and the 'l' key for words. If your device does not have a keyboard, touch the left button on the screen for nonwords and the right button for words. Do not use the mouse as this will slow down your response. \n\nPress the space bar or touch the button below to continue."), ('has_image', 0), ('instruct_image', None)]),
      OrderedDict([('pageN', 3), ('phase', 'instructions'), ('instruct_text', 'Test'), ('has_image', 1), ('instruct_image', 'keyboard-example.gif')]),
      OrderedDict([('pageN', 4), ('phase', 'instructions'), ('instruct_text', "It is very important that you respond as quickly and accurately as possible, as each letter string will only be on the screen for two seconds. If you do not respond within this time, the message 'Too slow!' will be displayed and the experiment will progress to the next letter string. The first 20 trials will be practice trials and you will receive feedback on your answers. \n\nPress the space bar or touch the button below to start the practice trials."), ('has_image', 0), ('instruct_image', None)])]
    Routine Instructions
  LoopTerminator instruction_pages
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = trials_list_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialID', 1001), ('StimulusType', 'WORD'), ('Condition', 'ID'), ('PrimeDuration', 33), ('Prime', 'utopia'), ('Target', 'UTOPIA'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1002), ('StimulusType', 'WORD'), ('Condition', 'ID'), ('PrimeDuration', 33), ('Prime', 'adjust'), ('Target', 'ADJUST'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1003), ('StimulusType', 'WORD'), ('Condition', 'ID'), ('PrimeDuration', 50), ('Prime', 'almond'), ('Target', 'ALMOND'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1004), ('StimulusType', 'WORD'), ('Condition', 'ID'), ('PrimeDuration', 50), ('Prime', 'matrix'), ('Target', 'MATRIX'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1005), ('StimulusType', 'WORD'), ('Condition', 'UN'), ('PrimeDuration', 33), ('Prime', 'abound'), ('Target', 'SQUEAK'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1006), ('StimulusType', 'WORD'), ('Condition', 'UN'), ('PrimeDuration', 33), ('Prime', 'frenzy'), ('Target', 'OBTAIN'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1007), ('StimulusType', 'WORD'), ('Condition', 'UN'), ('PrimeDuration', 50), ('Prime', 'tropic'), ('Target', 'ZOMBIE'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1008), ('StimulusType', 'WORD'), ('Condition', 'UN'), ('PrimeDuration', 50), ('Prime', 'hurdle'), ('Target', 'VOLUME'), ('corrAns', 'l')]),
      OrderedDict([('TrialID', 1009), ('StimulusType', 'NW'), ('Condition', 'ID'), ('PrimeDuration', 33), ('Prime', 'aslert'), ('Target', 'ASLERT'), ('corrAns', 'a')])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
    Routine presentTrial
    Routine feedback
  LoopTerminator practice_trials
  LoopInitiator end_of_practice_trials_pages loopType="TrialHandler"
    conditions = [OrderedDict([('pageN', 1), ('phase', 'end_of_practice'), ('instruct_text', 'You have completed the practice trials. During the experimental trials, you will not receive feedback, but it is very important that you respond as quickly and accurately as possible. Before you begin, please ensure that you are in a comfortable and quiet location and will not be disturbed for about 10 minutes, as the experiment cannot be paused and we cannot use your data if you do not complete all the trials. When you are ready to start the experimental trials, please press space or touch the button below.')])]
    conditionsFile = instructions_after_practice.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Instructions
  LoopTerminator end_of_practice_trials_pages
  LoopInitiator experiment_trials loopType="TrialHandler"
    conditionsFile = $trial_list_file
    loopType = random
    nReps = 1
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    Routine presentTrial
    Routine feedback
    Routine Break
  LoopTerminator experiment_trials
  Routine End
